begintemplate HL23PYR


// 公共声明
public init, biophys, geom_nseg
public soma, dend, apic, axon, myelin
public all, somatic, apical, basal, axonal
public nSecAll, nSecSoma, nSecApical, nSecBasal, nSecAxonal


// 对象引用
objref all, somatic, apical, basal, axonal, sref, this
strdef tstr


// 创建节段
create soma[1], dend[30], apic[58], axon[2], myelin[1]


proc init() {
    all = new SectionList()
    somatic = new SectionList()
    basal = new SectionList()
    apical = new SectionList()
    axonal = new SectionList()
    
    define_geometry()
    build_connectivity()
    build_lists()
    geom_nseg()
    biophys()
}


proc define_geometry() {
    geometry_chunk_0()
    geometry_chunk_1()
    geometry_chunk_2()
    geometry_chunk_3()
    geometry_chunk_4()
}


proc geometry_chunk_0() {
    soma[0] {
        pt3dclear()
        pt3dadd(508.5343017578125, 577.6159057617188, 36.27009963989258, 12.583999633789062)
        pt3dadd(514.8262939453125, 577.6159057617188, 36.27009963989258, 12.583999633789062)
        pt3dadd(521.1182861328125, 577.6159057617188, 36.27009963989258, 12.583999633789062)
    }
    dend[0] {
        pt3dclear()
        pt3dadd(513.5794067382812, 584.5462036132812, 36.23680114746094, 1.2355999946594238)
        pt3dadd(513.1605834960938, 585.6102294921875, 36.22330093383789, 1.2208000421524048)
        pt3dadd(512.6024169921875, 586.6008911132812, 36.20370101928711, 1.2059999704360962)
        pt3dadd(512.5189208984375, 587.7413940429688, 36.17770004272461, 1.1914000511169434)
        pt3dadd(512.5131225585938, 588.8853759765625, 36.14550018310547, 1.176800012588501)
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    }
}


proc geometry_chunk_1() {
    dend[19] {
        pt3dclear()
        pt3dadd(539.727783203125, 567.6527709960938, 35.56869888305664, 0.7002000212669373)
        pt3dadd(540.6314697265625, 567.4732055664062, 35.39979934692383, 0.7002000212669373)
        pt3dadd(541.4345703125, 566.6746826171875, 35.27220153808594, 0.6980000138282776)
        pt3dadd(542.0684204101562, 565.7239990234375, 35.17499923706055, 0.6962000131607056)
        pt3dadd(542.7764892578125, 564.8408203125, 35.06159973144531, 0.6941999793052673)
        pt3dadd(543.7225952148438, 564.3466186523438, 34.940101623535156, 0.6922000050544739)
        pt3dadd(544.8632202148438, 564.4163818359375, 34.85049819946289, 0.6899999976158142)
        pt3dadd(545.7794799804688, 563.8214721679688, 34.79140090942383, 0.6881999969482422)
        pt3dadd(546.6959228515625, 563.1373901367188, 34.754398345947266, 0.6862000226974487)
        pt3dadd(547.7379760742188, 562.6798095703125, 34.73649978637695, 0.6841999888420105)
        pt3dadd(548.568603515625, 561.9121704101562, 34.73400115966797, 0.682200014591217)
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    }
}


proc geometry_chunk_2() {
    apic[9] {
        pt3dclear()
        pt3dadd(492.1990966796875, 535.1632080078125, 42.65299987792969, 1.9356000423431396)
        pt3dadd(491.0447998046875, 535.5452880859375, 43.841800689697266, 0.6863999962806702)
        pt3dadd(490.0072021484375, 535.9891967773438, 44.194400787353516, 0.6863999962806702)
        pt3dadd(488.8861083984375, 536.1824951171875, 44.53010177612305, 0.6863999962806702)
        pt3dadd(488.03729248046875, 536.715576171875, 44.95819854736328, 0.6863999962806702)
        pt3dadd(487.12890625, 537.2498779296875, 45.4541015625, 0.6863999962806702)
        pt3dadd(486.12109375, 537.76123046875, 45.86790084838867, 0.6863999962806702)
        pt3dadd(485.16009521484375, 538.380126953125, 46.16640090942383, 0.6863999962806702)
        pt3dadd(484.0790100097656, 538.70849609375, 46.380001068115234, 0.6863999962806702)
        pt3dadd(482.9429931640625, 538.8262939453125, 46.52619934082031, 0.6863999962806702)
        pt3dadd(481.8218994140625, 539.0458984375, 46.620601654052734, 0.6863999962806702)
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    }
}


proc geometry_chunk_3() {
    apic[29] {
        pt3dclear()
        pt3dadd(445.8728942871094, 481.9111022949219, 57.7947998046875, 1.3384000062942505)
        pt3dadd(444.5286865234375, 481.6434020996094, 59.34379959106445, 0.6636000275611877)
        pt3dadd(443.4258117675781, 481.7762145996094, 59.82699966430664, 0.6636000275611877)
        pt3dadd(442.3435974121094, 482.1170959472656, 60.318199157714844, 0.6636000275611877)
        pt3dadd(441.3861083984375, 482.6227111816406, 60.84880065917969, 0.6636000275611877)
        pt3dadd(440.58758544921875, 483.2142028808594, 61.511199951171875, 0.6636000275611877)
        pt3dadd(439.78448486328125, 483.8525085449219, 62.21630096435547, 0.6636000275611877)
        pt3dadd(439.2410888671875, 484.79168701171875, 62.80339813232422, 0.6636000275611877)
        pt3dadd(438.79949951171875, 485.8442077636719, 63.247501373291016, 0.6636000275611877)
        pt3dadd(437.98150634765625, 486.50201416015625, 63.509300231933594, 0.6636000275611877)
        pt3dadd(436.92559814453125, 486.6449890136719, 63.78850173950195, 0.6636000275611877)
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    }
}


proc geometry_chunk_4() {
    apic[49] {
        pt3dclear()
        pt3dadd(486.556884765625, 525.11767578125, 44.43239974975586, 1.9356000423431396)
        pt3dadd(486.36468505859375, 525.2263793945312, 43.80379867553711, 0.6863999962806702)
        pt3dadd(485.35919189453125, 525.4998168945312, 42.964900970458984, 0.6863999962806702)
        pt3dadd(484.2712097167969, 525.2183837890625, 42.614601135253906, 0.6863999962806702)
        pt3dadd(483.2095947265625, 524.7951049804688, 42.300201416015625, 0.6863999962806702)
        pt3dadd(482.10101318359375, 524.5228881835938, 42.010101318359375, 0.6863999962806702)
        pt3dadd(480.9696044921875, 524.521728515625, 41.731201171875, 0.6863999962806702)
        pt3dadd(479.89080810546875, 524.888916015625, 41.4375, 0.6863999962806702)
        pt3dadd(478.8280944824219, 524.9953002929688, 41.0614013671875, 0.6863999962806702)
        pt3dadd(477.9837951660156, 524.5297241210938, 40.50590133666992, 0.6863999962806702)
        pt3dadd(477.1899108886719, 523.781494140625, 39.90639877319336, 0.6863999962806702)
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        L = 20.0
        diam(0:1) = 2.875:1.875
    }
    axon[1] {
        pt3dclear()
        L = 30.0
        diam(0:1) = 1.6964285714285714:1.0535714285714286
    }
}


proc build_connectivity() { localobj sref
    connect dend[0](0), soma[0](0.5)
    connect dend[7](0), soma[0](0.5)
    connect dend[12](0), soma[0](0.5)
    connect dend[23](0), soma[0](0.5)
    connect apic[0](0), soma[0](0.5)
    connect axon[0](0), soma[0](0.5)
    connect axon[1](0), axon[0](1)
    connect apic[1](0), apic[0](1)
    connect apic[53](0), apic[0](1)
    connect dend[24](0), dend[23](1)
    connect dend[27](0), dend[23](1)
    connect dend[13](0), dend[12](1)
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}


proc build_lists() {
    soma[0] { somatic.append() all.append() }
    axon[0] { axonal.append() all.append() }
    axon[1] { axonal.append() all.append() }
    apic[0] { apical.append() all.append() }
    apic[1] { apical.append() all.append() }
    apic[2] { apical.append() all.append() }
    apic[3] { apical.append() all.append() }
    apic[4] { apical.append() all.append() }
    apic[5] { apical.append() all.append() }
    apic[6] { apical.append() all.append() }
    apic[7] { apical.append() all.append() }
    apic[8] { apical.append() all.append() }
    apic[9] { apical.append() all.append() }
    apic[10] { apical.append() all.append() }
    apic[11] { apical.append() all.append() }
    apic[12] { apical.append() all.append() }
    apic[13] { apical.append() all.append() }
    apic[14] { apical.append() all.append() }
    apic[15] { apical.append() all.append() }
    apic[16] { apical.append() all.append() }
    apic[17] { apical.append() all.append() }
    apic[18] { apical.append() all.append() }
    apic[19] { apical.append() all.append() }
    apic[20] { apical.append() all.append() }
    apic[21] { apical.append() all.append() }
    apic[22] { apical.append() all.append() }
    apic[23] { apical.append() all.append() }
    apic[24] { apical.append() all.append() }
    apic[25] { apical.append() all.append() }
    apic[26] { apical.append() all.append() }
    apic[27] { apical.append() all.append() }
    apic[28] { apical.append() all.append() }
    apic[29] { apical.append() all.append() }
    apic[30] { apical.append() all.append() }
    apic[31] { apical.append() all.append() }
    apic[32] { apical.append() all.append() }
    apic[33] { apical.append() all.append() }
    apic[34] { apical.append() all.append() }
    apic[35] { apical.append() all.append() }
    apic[36] { apical.append() all.append() }
    apic[37] { apical.append() all.append() }
    apic[38] { apical.append() all.append() }
    apic[39] { apical.append() all.append() }
    apic[40] { apical.append() all.append() }
    apic[41] { apical.append() all.append() }
    apic[42] { apical.append() all.append() }
    apic[43] { apical.append() all.append() }
    apic[44] { apical.append() all.append() }
    apic[45] { apical.append() all.append() }
    apic[46] { apical.append() all.append() }
    apic[47] { apical.append() all.append() }
    apic[48] { apical.append() all.append() }
    apic[49] { apical.append() all.append() }
    apic[50] { apical.append() all.append() }
    apic[51] { apical.append() all.append() }
    apic[52] { apical.append() all.append() }
    apic[53] { apical.append() all.append() }
    apic[54] { apical.append() all.append() }
    apic[55] { apical.append() all.append() }
    apic[56] { apical.append() all.append() }
    apic[57] { apical.append() all.append() }
    dend[0] { basal.append() all.append() }
    dend[1] { basal.append() all.append() }
    dend[2] { basal.append() all.append() }
    dend[3] { basal.append() all.append() }
    dend[4] { basal.append() all.append() }
    dend[5] { basal.append() all.append() }
    dend[6] { basal.append() all.append() }
    dend[7] { basal.append() all.append() }
    dend[8] { basal.append() all.append() }
    dend[9] { basal.append() all.append() }
    dend[10] { basal.append() all.append() }
    dend[11] { basal.append() all.append() }
    dend[12] { basal.append() all.append() }
    dend[13] { basal.append() all.append() }
    dend[14] { basal.append() all.append() }
    dend[15] { basal.append() all.append() }
    dend[16] { basal.append() all.append() }
    dend[17] { basal.append() all.append() }
    dend[18] { basal.append() all.append() }
    dend[19] { basal.append() all.append() }
    dend[20] { basal.append() all.append() }
    dend[21] { basal.append() all.append() }
    dend[22] { basal.append() all.append() }
    dend[23] { basal.append() all.append() }
    dend[24] { basal.append() all.append() }
    dend[25] { basal.append() all.append() }
    dend[26] { basal.append() all.append() }
    dend[27] { basal.append() all.append() }
    dend[28] { basal.append() all.append() }
    dend[29] { basal.append() all.append() }
}


proc geom_nseg() {local nSec, L1, L2, D1, D2, nSeg1, nSeg2
	soma area(.5) // make sure diam reflects 3d points
	nSec = 0
	forsec all {
		nseg = 1 + 2*int(L/40)
		nSec = nSec + 1
	}

	nSecAll = nSec
	nSec = 0
	forsec somatic { nSec = nSec + 1}
	nSecSoma	= 	nSec
	nSec = 0
	forsec apical { nSec = nSec + 1}
	nSecApical= 	nSec
	nSec = 0
	forsec basal { nSec = nSec + 1}
	nSecBasal	= 	nSec
	nSec = 0
	forsec axonal { nSec = nSec + 1}
	nSecAxonalOrig = nSecAxonal	= 	nSec
}


func getLongestBranch(){local maxL,d localobj distallist,sref
		sprint(tstr,"%s distance()",$s1)
		execute(tstr,this)
		
		if(0==strcmp($s1,"axon")){
		sprint(tstr,"%s[0] distance(1)",$s1)
		execute(tstr,this)
		}

	maxL = 0
	d = 0
	distallist = new SectionList()
	forsec $s1 {
		sref = new SectionRef()
		if (sref.nchild==0) distallist.append()
	}
	forsec distallist{
		d = distance(1)
		if(maxL<d) maxL = d
	}
	// for the soma case
	if (maxL == 0) {
		$s1 {
			maxL = L
		}
		}
	return maxL
}


proc distribute_channels()	{local dist,val,base,maxLength
	base = $8
	soma distance()
	maxLength = getLongestBranch($s1)

	forsec $s1		{
		if(0==strcmp($s2,"Ra")){
			Ra = $8
		} else {
			for(x) {
				if (($3==3) || ($3==4) || ($3==5)) {
					dist = distance(x)
				} else {
					dist = distance(x)/maxLength
				}
				val = calculate_distribution($3,dist,$4,$5,$6,$7,$8)
				sprint(tstr,"%s(%-5.10f) = %-5.10f",$s2,x,val)
				execute(tstr)
			}
		}
	}
}


func calculate_distribution()	{local value
	if ($1==0)	{value = $3 + $2*$4}
	if ($1==1) {value = $3 + ($4/(1+exp(($2-$5)/$6)))}
	if ($1==2) {value = $3 + $6*exp($4*($2-$5))}
	if ($1==3) {
		if (($2 > $5) && ($2 < $6)) {
			value = $3
		} else {
			value = $4
		}
	}
	if ($1==4) {value = $3 + $6*exp($4*($2-$5))}
	if ($1==5) {value = $3 + ($4/(1+exp(($2-$5)/$6)))}
	value = value*$7
	return value
}


proc biophys(){
	//delete_axon(3,1.75,1,1)
	forsec all {
			insert pas
			Ra = 100
			cm = 1
			e_pas = -80
			g_pas = 0.0000954
			insert Ih
		}
		forsec somatic {
			insert SK
			insert CaDynamics
			insert Ca_LVA
			insert Ca_HVA
			insert K_T
			insert K_P
			insert Kv3_1
			insert NaTg
			insert Im
			ek = -85
			ena = 50
			gamma_CaDynamics = 0.0005
			vshiftm_NaTg = 13
			vshifth_NaTg = 15
			slopem_NaTg = 7
			gbar_Ih = 0.000148
		}

		forsec apical {
			cm = 2
		}
		forsec basal {
			cm = 2
			gbar_Ih = 0.000000709
		}
		distribute_channels("apic","gbar_Ih",2,-0.8696,3.6161,0.0,2.0870,soma.gbar_Ih)

		forsec axonal {
			insert SK
			insert Ca_LVA
			insert Ca_HVA
			insert K_T
			insert K_P
			insert Nap
			insert Kv3_1
			insert NaTg
			insert CaDynamics
			insert Im
			ek = -85
			ena = 50
			vshifth_NaTg = 10
			slopem_NaTg = 9
			gamma_CaDynamics = 0.0005
		}

		distribute_channels("axon","decay_CaDynamics",0,1.000000,0.000000,0.000000,0.000000,226.0000000000)
		distribute_channels("axon","gbar_SK",0,1.000000,0.000000,0.000000,0.000000,0.0145000000)
		distribute_channels("axon","gbar_Ca_LVA",0,1.000000,0.000000,0.000000,0.000000,0.0439000000)
		distribute_channels("axon","gbar_Ca_HVA",0,1.000000,0.000000,0.000000,0.000000,0.0003060000)
		distribute_channels("axon","gbar_Kv3_1",0,1.000000,0.000000,0.000000,0.000000,0.9410000000)
		distribute_channels("axon","gbar_K_T",0,1.000000,0.000000,0.000000,0.000000,0.0424000000)
		distribute_channels("axon","gbar_K_P",0,1.000000,0.000000,0.000000,0.000000,0.3380000000)
		distribute_channels("axon","gbar_Nap",0,1.000000,0.000000,0.000000,0.000000,0.0084200000)
		distribute_channels("axon","gbar_NaTg",0,1.000000,0.000000,0.000000,0.000000,1.3800000000)
		distribute_channels("axon","gbar_Im",0,1.000000,0.000000,0.000000,0.000000,0.0000000000)
		distribute_channels("soma","decay_CaDynamics",0,1.000000,0.000000,0.000000,0.000000,20.0000000000)
		distribute_channels("soma","gbar_Im",0,1.000000,0.000000,0.000000,0.000000,0.0003060000)
		distribute_channels("soma","gbar_Ca_LVA",0,1.000000,0.000000,0.000000,0.000000,0.0029600000)
		distribute_channels("soma","gbar_Ca_HVA",0,1.000000,0.000000,0.000000,0.000000,0.0015500000)
		distribute_channels("soma","gbar_Kv3_1",0,1.000000,0.000000,0.000000,0.000000,0.0424000000)
		distribute_channels("soma","gbar_SK",0,1.000000,0.000000,0.000000,0.000000,0.0008530000)
		distribute_channels("soma","gbar_K_T",0,1.000000,0.000000,0.000000,0.000000,0.0605000000)
		distribute_channels("soma","gbar_K_P",0,1.000000,0.000000,0.000000,0.000000,0.0002080000)
		distribute_channels("soma","gbar_NaTg",0,1.000000,0.000000,0.000000,0.000000,0.2720000000)
		myelin{
			Ra = 100
			cm = 0.02
		}
}


endtemplate HL23PYR
