begintemplate HL23SST


// 公共声明
public init, biophys, geom_nseg
public soma, dend, axon, myelin
public all, somatic, apical, basal, axonal
public nSecAll, nSecSoma, nSecApical, nSecBasal, nSecAxonal


// 对象引用
objref all, somatic, apical, basal, axonal, sref, this
strdef tstr


// 创建节段
create soma[1], dend[55], axon[2], myelin[1]


proc init() {
    all = new SectionList()
    somatic = new SectionList()
    basal = new SectionList()
    apical = new SectionList()
    axonal = new SectionList()
    
    define_geometry()
    build_connectivity()
    build_lists()
    geom_nseg()
    biophys()
}


proc define_geometry() {
    geometry_chunk_0()
    geometry_chunk_1()
    geometry_chunk_2()
}


proc geometry_chunk_0() {
    soma[0] {
        pt3dclear()
        pt3dadd(289.84039306640625, 985.0388793945312, 19.040000915527344, 16.768800735473633)
        pt3dadd(298.22479248046875, 985.0388793945312, 19.040000915527344, 16.768800735473633)
        pt3dadd(306.60919189453125, 985.0388793945312, 19.040000915527344, 16.768800735473633)
    }
    dend[0] {
        pt3dclear()
        pt3dadd(296.7673034667969, 977.819091796875, 25.804899215698242, 1.5856000185012817)
        pt3dadd(295.5089111328125, 975.92919921875, 26.591899871826172, 1.5856000185012817)
    }
    dend[1] {
        pt3dclear()
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    }
}


proc geometry_chunk_1() {
    dend[19] {
        pt3dclear()
        pt3dadd(312.9584045410156, 974.5656127929688, 25.380599975585938, 1.579800009727478)
        pt3dadd(312.0888977050781, 973.11962890625, 25.874000549316406, 1.562000036239624)
        pt3dadd(311.6130065917969, 974.0313110351562, 27.288000106811523, 1.541200041770935)
        pt3dadd(312.7398986816406, 972.4022827148438, 28.410999298095703, 1.5216000080108643)
        pt3dadd(311.8315124511719, 970.5341186523438, 29.56909942626953, 1.5025999546051025)
        pt3dadd(310.6715087890625, 968.5847778320312, 30.383399963378906, 1.4842000007629395)
        pt3dadd(309.197998046875, 966.9121704101562, 31.018699645996094, 1.465399980545044)
        pt3dadd(307.5690002441406, 965.3140869140625, 31.498899459838867, 1.4470000267028809)
        pt3dadd(306.7361145019531, 963.3201293945312, 31.960599899291992, 1.4279999732971191)
        pt3dadd(307.7131042480469, 961.2791748046875, 32.31930160522461, 1.4091999530792236)
        pt3dadd(308.0185852050781, 959.023193359375, 32.472999572753906, 1.3905999660491943)
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    }
}


proc geometry_chunk_2() {
    dend[39] {
        pt3dclear()
        pt3dadd(291.9808044433594, 973.8253784179688, 19.711700439453125, 2.677000045776367)
        pt3dadd(292.1639099121094, 971.7261962890625, 19.962099075317383, 1.3739999532699585)
        pt3dadd(292.2279052734375, 969.4415893554688, 20.188100814819336, 1.350000023841858)
        pt3dadd(292.2279052734375, 968.297607421875, 20.272899627685547, 1.350000023841858)
        pt3dadd(291.98309326171875, 967.1810913085938, 20.342100143432617, 1.350000023841858)
        pt3dadd(291.71661376953125, 966.0930786132812, 20.47480010986328, 1.350000023841858)
        pt3dadd(291.3172912597656, 963.8519897460938, 20.6387996673584, 1.350000023841858)
        pt3dadd(291.0838928222656, 962.7321166992188, 20.6924991607666, 1.350000023841858)
    }
    dend[40] {
        pt3dclear()
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        L = 20.0
        diam(0:1) = 2.875:1.875
    }
    axon[1] {
        pt3dclear()
        L = 30.0
        diam(0:1) = 1.6964285714285714:1.0535714285714286
    }
}


proc build_connectivity() { localobj sref
    connect dend[0](0), soma[0](0.5)
    connect dend[3](0), soma[0](0.5)
    connect dend[18](0), soma[0](0.5)
    connect dend[31](0), soma[0](0.5)
    connect axon[0](0), soma[0](0.5)
    connect axon[1](0), axon[0](1)
    connect dend[32](0), dend[31](1)
    connect dend[39](0), dend[31](1)
    connect dend[19](0), dend[18](1)
    connect dend[20](0), dend[18](1)
    connect dend[4](0), dend[3](1)
    connect dend[11](0), dend[3](1)
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}


proc build_lists() {
    soma[0] { somatic.append() all.append() }
    axon[0] { axonal.append() all.append() }
    axon[1] { axonal.append() all.append() }
    dend[0] { basal.append() all.append() }
    dend[1] { basal.append() all.append() }
    dend[2] { basal.append() all.append() }
    dend[3] { basal.append() all.append() }
    dend[4] { basal.append() all.append() }
    dend[5] { basal.append() all.append() }
    dend[6] { basal.append() all.append() }
    dend[7] { basal.append() all.append() }
    dend[8] { basal.append() all.append() }
    dend[9] { basal.append() all.append() }
    dend[10] { basal.append() all.append() }
    dend[11] { basal.append() all.append() }
    dend[12] { basal.append() all.append() }
    dend[13] { basal.append() all.append() }
    dend[14] { basal.append() all.append() }
    dend[15] { basal.append() all.append() }
    dend[16] { basal.append() all.append() }
    dend[17] { basal.append() all.append() }
    dend[18] { basal.append() all.append() }
    dend[19] { basal.append() all.append() }
    dend[20] { basal.append() all.append() }
    dend[21] { basal.append() all.append() }
    dend[22] { basal.append() all.append() }
    dend[23] { basal.append() all.append() }
    dend[24] { basal.append() all.append() }
    dend[25] { basal.append() all.append() }
    dend[26] { basal.append() all.append() }
    dend[27] { basal.append() all.append() }
    dend[28] { basal.append() all.append() }
    dend[29] { basal.append() all.append() }
    dend[30] { basal.append() all.append() }
    dend[31] { basal.append() all.append() }
    dend[32] { basal.append() all.append() }
    dend[33] { basal.append() all.append() }
    dend[34] { basal.append() all.append() }
    dend[35] { basal.append() all.append() }
    dend[36] { basal.append() all.append() }
    dend[37] { basal.append() all.append() }
    dend[38] { basal.append() all.append() }
    dend[39] { basal.append() all.append() }
    dend[40] { basal.append() all.append() }
    dend[41] { basal.append() all.append() }
    dend[42] { basal.append() all.append() }
    dend[43] { basal.append() all.append() }
    dend[44] { basal.append() all.append() }
    dend[45] { basal.append() all.append() }
    dend[46] { basal.append() all.append() }
    dend[47] { basal.append() all.append() }
    dend[48] { basal.append() all.append() }
    dend[49] { basal.append() all.append() }
    dend[50] { basal.append() all.append() }
    dend[51] { basal.append() all.append() }
    dend[52] { basal.append() all.append() }
    dend[53] { basal.append() all.append() }
    dend[54] { basal.append() all.append() }
}


proc geom_nseg() {local nSec, L1, L2, D1, D2, nSeg1, nSeg2
	soma area(.5) // make sure diam reflects 3d points
	nSec = 0
	forsec all {
		nseg = 1 + 2*int(L/40)
		nSec = nSec + 1
	}

	nSecAll = nSec
	nSec = 0
	forsec somatic { nSec = nSec + 1}
	nSecSoma	= 	nSec
	nSec = 0
	forsec apical { nSec = nSec + 1}
	nSecApical= 	nSec
	nSec = 0
	forsec basal { nSec = nSec + 1}
	nSecBasal	= 	nSec
	nSec = 0
	forsec axonal { nSec = nSec + 1}
	nSecAxonalOrig = nSecAxonal	= 	nSec
}


func getLongestBranch(){local maxL,d localobj distallist,sref
		sprint(tstr,"%s distance()",$s1)
		execute(tstr,this)
		
		if(0==strcmp($s1,"axon")){
		sprint(tstr,"%s[0] distance(1)",$s1)
		execute(tstr,this)
		}

	maxL = 0
	d = 0
	distallist = new SectionList()
	forsec $s1 {
		sref = new SectionRef()
		if (sref.nchild==0) distallist.append()
	}
	forsec distallist{
		d = distance(1)
		if(maxL<d) maxL = d
	}
	// for the soma case
	if (maxL == 0) {
		$s1 {
			maxL = L
		}
		}
	return maxL
}


proc distribute_channels()	{local dist,val,base,maxLength
	base = $8
	soma distance()
	maxLength = getLongestBranch($s1)

	forsec $s1		{
		if(0==strcmp($s2,"Ra")){
			Ra = $8
		} else {
			for(x) {
				if (($3==3) || ($3==4) || ($3==5)) {
					dist = distance(x)
				} else {
					dist = distance(x)/maxLength
				}
				val = calculate_distribution($3,dist,$4,$5,$6,$7,$8)
				sprint(tstr,"%s(%-5.10f) = %-5.10f",$s2,x,val)
				execute(tstr)
			}
		}
	}
}


func calculate_distribution()	{local value
	if ($1==0)	{value = $3 + $2*$4}
	if ($1==1) {value = $3 + ($4/(1+exp(($2-$5)/$6)))}
	if ($1==2) {value = $3 + $6*exp($4*($2-$5))}
	if ($1==3) {
		if (($2 > $5) && ($2 < $6)) {
			value = $3
		} else {
			value = $4
		}
	}
	if ($1==4) {value = $3 + $6*exp($4*($2-$5))}
	if ($1==5) {value = $3 + ($4/(1+exp(($2-$5)/$6)))}
	value = value*$7
	return value
}


proc biophys(){
	//delete_axon(3,1.75,1,1)
	forsec all {
			insert pas
			Ra = 100
			cm = 1
			e_pas = -81.5
			g_pas = 0.0000232
			insert Ih
		}
		forsec somatic {
			insert SK
			insert CaDynamics
			insert Ca_LVA
			insert Ca_HVA
			insert K_T
			insert K_P
			insert Kv3_1
			insert NaTg
			insert Im
			ek = -85
			ena = 50
			gamma_CaDynamics = 0.0005
			vshiftm_NaTg = 13
			vshifth_NaTg = 15
			slopem_NaTg = 7
			gbar_Ih = 0.0000431
		}
		forsec basal {
			cm = 1
			gbar_Ih = 0.0000949
		}
		forsec axonal {
			insert SK
			insert Ca_LVA
			insert Ca_HVA
			insert K_T
			insert K_P
			insert Nap
			insert Kv3_1
			insert NaTg
			insert CaDynamics
			insert Im
			ek = -85
			ena = 50
			vshifth_NaTg = 10
			slopem_NaTg = 9
			gamma_CaDynamics = 0.0005
		}

		distribute_channels("axon","decay_CaDynamics",0,1.000000,0.000000,0.000000,0.000000,469.0000000000)
		distribute_channels("axon","gbar_SK",0,1.000000,0.000000,0.000000,0.000000,0.0011300000)
		distribute_channels("axon","gbar_Ca_LVA",0,1.000000,0.000000,0.000000,0.000000,0.0627000000)
		distribute_channels("axon","gbar_Ca_HVA",0,1.000000,0.000000,0.000000,0.000000,0.0014500000)
		distribute_channels("axon","gbar_Kv3_1",0,1.000000,0.000000,0.000000,0.000000,0.9840000000)
		distribute_channels("axon","gbar_K_T",0,1.000000,0.000000,0.000000,0.000000,0.0230000000)
		distribute_channels("axon","gbar_K_P",0,1.000000,0.000000,0.000000,0.000000,0.0295000000)
		distribute_channels("axon","gbar_Nap",0,1.000000,0.000000,0.000000,0.000000,0.0004440000)
		distribute_channels("axon","gbar_NaTg",0,1.000000,0.000000,0.000000,0.000000,0.3430000000)
		distribute_channels("axon","gbar_Im",0,1.000000,0.000000,0.000000,0.000000,0.0003170000)
		distribute_channels("soma","decay_CaDynamics",0,1.000000,0.000000,0.000000,0.000000,465.0000000000)
		distribute_channels("soma","gbar_Im",0,1.000000,0.000000,0.000000,0.000000,0.0001580000)
		distribute_channels("soma","gbar_Ca_LVA",0,1.000000,0.000000,0.000000,0.000000,0.0031400000)
		distribute_channels("soma","gbar_Ca_HVA",0,1.000000,0.000000,0.000000,0.000000,0.0035500000)
		distribute_channels("soma","gbar_Kv3_1",0,1.000000,0.000000,0.000000,0.000000,0.8710000000)
		distribute_channels("soma","gbar_SK",0,1.000000,0.000000,0.000000,0.000000,0.0000000000)
		distribute_channels("soma","gbar_K_T",0,1.000000,0.000000,0.000000,0.000000,0.0000000000)
		distribute_channels("soma","gbar_K_P",0,1.000000,0.000000,0.000000,0.000000,0.0111000000)
		distribute_channels("soma","gbar_NaTg",0,1.000000,0.000000,0.000000,0.000000,0.1270000000)
		myelin{
			Ra = 100
			cm = 0.02
		}
}


endtemplate HL23SST
