begintemplate HL23VIP


// 公共声明
public init, biophys, geom_nseg
public soma, dend, axon
public all, somatic, apical, basal, axonal
public nSecAll, nSecSoma, nSecApical, nSecBasal, nSecAxonal


// 对象引用
objref all, somatic, apical, basal, axonal, sref, this
strdef tstr


// 创建节段
create soma[1], dend[53], axon[2]


proc init() {
    all = new SectionList()
    somatic = new SectionList()
    basal = new SectionList()
    apical = new SectionList()
    axonal = new SectionList()
    
    define_geometry()
    build_connectivity()
    build_lists()
    geom_nseg()
    biophys()
}


proc define_geometry() {
    geometry_chunk_0()
    geometry_chunk_1()
    geometry_chunk_2()
}


proc geometry_chunk_0() {
    soma[0] {
        pt3dclear()
        pt3dadd(305.17230224609375, 263.2320861816406, 28.84000015258789, 16.93120002746582)
        pt3dadd(313.6379089355469, 263.2320861816406, 28.84000015258789, 16.93120002746582)
        pt3dadd(322.103515625, 263.2320861816406, 28.84000015258789, 16.93120002746582)
    }
    dend[0] {
        pt3dclear()
        pt3dadd(311.70220947265625, 256.3612060546875, 27.779300689697266, 0.2287999987602234)
        pt3dadd(311.3922119140625, 255.26190185546875, 27.606599807739258, 0.4659999907016754)
        pt3dadd(311.19659423828125, 254.13729858398438, 27.527999877929688, 0.7080000042915344)
        pt3dadd(311.5054931640625, 253.03909301757812, 27.454200744628906, 0.6980000138282776)
        pt3dadd(311.4288024902344, 251.89849853515625, 27.385499954223633, 0.8452000021934509)
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    }
}


proc geometry_chunk_1() {
    dend[19] {
        pt3dclear()
        pt3dadd(314.2568054199219, 287.71600341796875, 36.33620071411133, 1.2568000555038452)
        pt3dadd(314.0509033203125, 288.60150146484375, 36.81639862060547, 1.1440000534057617)
        pt3dadd(312.95721435546875, 288.73870849609375, 36.21070098876953, 0.7864000201225281)
        pt3dadd(311.86810302734375, 288.53619384765625, 35.93320083618164, 0.7390000224113464)
        pt3dadd(310.8407897949219, 288.643798828125, 35.638099670410156, 0.7418000102043152)
        pt3dadd(309.966796875, 289.3634033203125, 35.46760177612305, 0.7639999985694885)
        pt3dadd(309.2620849609375, 290.25909423828125, 35.392601013183594, 0.723800003528595)
        pt3dadd(308.5848083496094, 291.1673889160156, 35.424198150634766, 0.5863999724388123)
        pt3dadd(307.6982116699219, 291.8641052246094, 35.5364990234375, 0.6359999775886536)
        pt3dadd(306.79681396484375, 292.525390625, 35.690799713134766, 0.6244000196456909)
        pt3dadd(306.0166015625, 293.3421936035156, 35.88650131225586, 0.6467999815940857)
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    }
}


proc geometry_chunk_2() {
    dend[39] {
        pt3dclear()
        pt3dadd(318.4713134765625, 282.2694091796875, 33.40959930419922, 1.332200050354004)
        pt3dadd(318.7939147949219, 283.9075927734375, 34.152400970458984, 0.2287999987602234)
        pt3dadd(319.4460144042969, 284.8080139160156, 34.077999114990234, 0.9373999834060669)
        pt3dadd(319.823486328125, 285.88330078125, 34.04880142211914, 0.8949999809265137)
        pt3dadd(320.1048889160156, 286.9917907714844, 34.037601470947266, 0.9470000267028809)
        pt3dadd(320.3074035644531, 288.11639404296875, 34.04690170288086, 0.8668000102043152)
        pt3dadd(320.343994140625, 289.25579833984375, 34.07630157470703, 0.8895999789237976)
        pt3dadd(320.544189453125, 290.3631896972656, 34.15380096435547, 0.7851999998092651)
        pt3dadd(321.181396484375, 291.2716064453125, 34.27199935913086, 0.6169999837875366)
        pt3dadd(322.0234069824219, 292.0392150878906, 34.404701232910156, 0.6406000256538391)
        pt3dadd(322.88031005859375, 292.78619384765625, 34.55059814453125, 0.6564000248908997)
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        L = 30.0
        diam = 1.1062632630369478
    }
    axon[1] {
        pt3dclear()
        L = 30.0
        diam = 0.3140589549560489
    }
}


proc build_connectivity() { localobj sref
    connect axon[0](0), soma[0](1)
    connect dend[0](0), soma[0](0.5)
    connect dend[17](0), soma[0](0.5)
    connect dend[46](0), soma[0](0.5)
    connect dend[47](0), dend[46](1)
    connect dend[50](0), dend[46](1)
    connect dend[18](0), dend[17](1)
    connect dend[39](0), dend[17](1)
    connect dend[1](0), dend[0](1)
    connect dend[10](0), dend[0](1)
    connect axon[1](0), axon[0](1)
    connect dend[51](0), dend[50](1)
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}


proc build_lists() {
    soma[0] { somatic.append() all.append() }
    axon[0] { axonal.append() all.append() }
    axon[1] { axonal.append() all.append() }
    dend[0] { basal.append() all.append() }
    dend[1] { basal.append() all.append() }
    dend[2] { basal.append() all.append() }
    dend[3] { basal.append() all.append() }
    dend[4] { basal.append() all.append() }
    dend[5] { basal.append() all.append() }
    dend[6] { basal.append() all.append() }
    dend[7] { basal.append() all.append() }
    dend[8] { basal.append() all.append() }
    dend[9] { basal.append() all.append() }
    dend[10] { basal.append() all.append() }
    dend[11] { basal.append() all.append() }
    dend[12] { basal.append() all.append() }
    dend[13] { basal.append() all.append() }
    dend[14] { basal.append() all.append() }
    dend[15] { basal.append() all.append() }
    dend[16] { basal.append() all.append() }
    dend[17] { basal.append() all.append() }
    dend[18] { basal.append() all.append() }
    dend[19] { basal.append() all.append() }
    dend[20] { basal.append() all.append() }
    dend[21] { basal.append() all.append() }
    dend[22] { basal.append() all.append() }
    dend[23] { basal.append() all.append() }
    dend[24] { basal.append() all.append() }
    dend[25] { basal.append() all.append() }
    dend[26] { basal.append() all.append() }
    dend[27] { basal.append() all.append() }
    dend[28] { basal.append() all.append() }
    dend[29] { basal.append() all.append() }
    dend[30] { basal.append() all.append() }
    dend[31] { basal.append() all.append() }
    dend[32] { basal.append() all.append() }
    dend[33] { basal.append() all.append() }
    dend[34] { basal.append() all.append() }
    dend[35] { basal.append() all.append() }
    dend[36] { basal.append() all.append() }
    dend[37] { basal.append() all.append() }
    dend[38] { basal.append() all.append() }
    dend[39] { basal.append() all.append() }
    dend[40] { basal.append() all.append() }
    dend[41] { basal.append() all.append() }
    dend[42] { basal.append() all.append() }
    dend[43] { basal.append() all.append() }
    dend[44] { basal.append() all.append() }
    dend[45] { basal.append() all.append() }
    dend[46] { basal.append() all.append() }
    dend[47] { basal.append() all.append() }
    dend[48] { basal.append() all.append() }
    dend[49] { basal.append() all.append() }
    dend[50] { basal.append() all.append() }
    dend[51] { basal.append() all.append() }
    dend[52] { basal.append() all.append() }
}


proc geom_nseg() {local nSec, L1, L2, D1, D2, nSeg1, nSeg2
	soma area(.5) // make sure diam reflects 3d points
	nSec = 0
	forsec all {
		nseg = 1 + 2*int(L/40)
		nSec = nSec + 1
	}

	nSecAll = nSec
	nSec = 0
	forsec somatic { nSec = nSec + 1}
	nSecSoma	= 	nSec
	nSec = 0
	forsec apical { nSec = nSec + 1}
	nSecApical= 	nSec
	nSec = 0
	forsec basal { nSec = nSec + 1}
	nSecBasal	= 	nSec
	nSec = 0
	forsec axonal { nSec = nSec + 1}
	nSecAxonalOrig = nSecAxonal	= 	nSec
}


func getLongestBranch(){local maxL,d localobj distallist,sref
		sprint(tstr,"%s distance()",$s1)
		execute(tstr,this)
		
		if(0==strcmp($s1,"axon")){
		sprint(tstr,"%s[0] distance(1)",$s1)
		execute(tstr,this)
		}

	maxL = 0
	d = 0
	distallist = new SectionList()
	forsec $s1 {
		sref = new SectionRef()
		if (sref.nchild==0) distallist.append()
	}
	forsec distallist{
		d = distance(1)
		if(maxL<d) maxL = d
	}
	// for the soma case
	if (maxL == 0) {
		$s1 {
			maxL = L
		}
		}
	return maxL
}


proc distribute_channels()	{local dist,val,base,maxLength
	base = $8
	soma distance()
	maxLength = getLongestBranch($s1)

	forsec $s1		{
		if(0==strcmp($s2,"Ra")){
			Ra = $8
		} else {
			for(x) {
				if (($3==3) || ($3==4) || ($3==5)) {
					dist = distance(x)
				} else {
					dist = distance(x)/maxLength
				}
				val = calculate_distribution($3,dist,$4,$5,$6,$7,$8)
				sprint(tstr,"%s(%-5.10f) = %-5.10f",$s2,x,val)
				execute(tstr)
			}
		}
	}
}


func calculate_distribution()	{local value
	if ($1==0)	{value = $3 + $2*$4}
	if ($1==1) {value = $3 + ($4/(1+exp(($2-$5)/$6)))}
	if ($1==2) {value = $3 + $6*exp($4*($2-$5))}
	if ($1==3) {
		if (($2 > $5) && ($2 < $6)) {
			value = $3
		} else {
			value = $4
		}
	}
	if ($1==4) {value = $3 + $6*exp($4*($2-$5))}
	if ($1==5) {value = $3 + ($4/(1+exp(($2-$5)/$6)))}
	value = value*$7
	return value
}


proc biophys(){
	//delete_axon_BPO()
	forsec all {
		insert pas
		insert Ih
		Ra = 100
		cm = 2
		e_pas = -79.74132024971513
		g_pas = 2.5756438955642182e-05
		gbar_Ih = 4.274951616063423e-05
	}

	forsec somatic {
		insert NaTg
		insert Nap
		insert K_P
		insert K_T
		insert Kv3_1
		insert SK
		insert Im
		insert Ca_HVA
		insert Ca_LVA
		insert CaDynamics
		ek = -85
		ena = 50
		gbar_NaTg = 0.11491205828369114
		vshiftm_NaTg = 13
		vshifth_NaTg = 15
		slopem_NaTg = 7
		slopeh_NaTg = 6
		gbar_Nap = 0.0001895305240694194
		gbar_K_P = 0.0009925418924114282
		gbar_K_T = 0.009051981253674193
		gbar_Kv3_1 = 0.31215653649208114
		vshift_Kv3_1 = 0
		gbar_SK = 0.1655502166633749
		gbar_Im = 0.0003679378262289559
		gbar_Ca_HVA = 4.384846294634834e-05
		gbar_Ca_LVA = 0.0034472458995879864
		gamma_CaDynamics = 0.0005
		decay_CaDynamics = 25.159166441555044
	}
	
	forsec axonal {
		insert NaTg
		insert Nap
		insert K_P
		insert K_T
		insert Kv3_1
		insert SK
		insert Im
		insert Ca_HVA
		insert Ca_LVA
		insert CaDynamics
		ek = -85
		ena = 50
		gbar_NaTg = 0.20112200814143477
		vshiftm_NaTg = 0
		vshifth_NaTg = 10
		slopem_NaTg = 9
		slopeh_NaTg = 6
		gbar_Nap = 0.0006248906854665301
		gbar_K_P = 0.26489876414660096
		gbar_K_T = 0.014364427062274185
		gbar_Kv3_1 = 0.0011201608191112877
		vshift_Kv3_1 = 0
		gbar_SK = 0.7027792087501376
		gbar_Im = 0.00013891465461042372
		gbar_Ca_HVA = 2.819397237794038e-05
		gbar_Ca_LVA = 0.010354001513952075
		gamma_CaDynamics = 0.0005
		decay_CaDynamics = 75.78875619470153
	}
}


endtemplate HL23VIP
